PsychoPy2experiment version="2026.2.2"
Settings
  expName = numbers_control_english
  expVersion = v1.0.0
  Audio lib = ptb
  runMode = 1
  Experiment info = {"participant*":"","session":"001","Language":"[\"arabic_path\",\"hindi_path\",\"mandarin_path\"]"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1440,900]
  Units = height
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
    RoutineSettingsComponent trial
      durationEstim = 5
      forceNonSlip = True
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    CodeComponent debug_text_trial
      Code Type = Both
      Each Frame:
        timer_lines = []
        timer_lines.append(f"Global: {globalClock.getTime():.2f}s")

        try:
            timer_lines.append(f"Routine: {routineTimer.getTime():.2f}s")
        except:
            timer_lines.append("Routine: N/A")

        #try:
        #    timer_lines.append(f"Inner: {innerClock.getTime():.2f}s")
        #except:
        #    timer_lines.append("Inner: N/A")
        #
        #try:
        #    timer_lines.append(f"Trial: {trialClock.getTime():.2f}s")
        #except:
        #    timer_lines.append("Trial: N/A")

        #try:
        #    timer_lines.append(f"Inner remaining: {inner_loop.nRemaining}")
        #except:
        #    timer_lines.append("Inner remaining: N/A")

        # Add the digit being shown this trial
        try:
            timer_lines.append(f"Digit: {digit}")
        except:
            timer_lines.append("Digit: N/A")

        timer_display = "\n".join(timer_lines)
      Each JS Frame:
        timer_lines = [];
        timer_lines.push(`Global: ${util.pad(Number.parseFloat(globalClock.getTime()).toFixed(2), 1)}s`);
        try {
            timer_lines.push(`Routine: ${util.pad(Number.parseFloat(routineTimer.getTime()).toFixed(2), 1)}s`);
        } catch(e) {
            timer_lines.push("Routine: N/A");
        }
        try {
            timer_lines.push(`Digit: ${digit}`);
        } catch(e) {
            timer_lines.push("Digit: N/A");
        }
        timer_display = timer_lines.join("\n");
    CodeComponent code
      Code Type = Both
      Before Experiment:
        import random
        import time
        total_exp_time= 30
      Begin Experiment:
        digits = [0,1,2,3,4,5,6,7,8,9]
        correct_digits = []
        exp_start_time = time.time()

        correct = 0
        incorrect = 0
        print('In begin experiment section of trial routine')
      Begin Routine:
        random.shuffle(digits)
        response = None
        point_subtracted = False
        responded = False
        started_routine_at = globalClock.getTime()
        routineTimer.reset()
        this_number = int(digit)
      Each Frame:
        # -----------------------------
        # SCORING + ROUTINE END LOGIC
        # -----------------------------

        if globalClock.getTime() > total_time:
            print(f"Timeout in TRIAL routine at {globalClock.getTime():.2f}")
            inner_loop.finished = True      # end the inner loop
            continueRoutine = False         # end THIS routine immediately
            globalClock.reset()
        elapsed = time.time() - exp_start_time
        if elapsed > total_exp_time:
            inner_loop.finished = True      # end the inner loop
            trials.finished = True
            continueRoutine = False         # end THIS routine immediately
      End Routine:
        ended_routine_at = globalClock.getTime()

        if ended_routine_at - min_time_for_incorrect > started_routine_at:
            if response == None:
                incorrect += 1
        #if globalClock.getTime() < total_time:
        #    print("Not enough time — repeating this trial")
        #    trials.thisTrialN -= 1
        #
    MouseComponent mouse
      startVal [time (s)] = 0
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
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    ButtonComponent button_0
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (-.5, -.1)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[0]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[0]
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)

        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
    ButtonComponent button_1
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (-.25, -.1)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[1]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[1]
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)

        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
    ButtonComponent button_2
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (0, -.1)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[2]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[2]
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)

        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
    ButtonComponent button_3
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (.25, -.1)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[3]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[3]
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)

        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
    ButtonComponent button_4
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (.5, -.1)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[4]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[4]
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)

        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
    ButtonComponent button_5
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (-.5, -.3)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[5]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[5]
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)

        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
    ButtonComponent button_6
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (-.25, -.3)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[6]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[6]
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)

        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
    ButtonComponent button_7
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (0, -.3)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[7]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[7]
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)

        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
    ButtonComponent button_8
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (.25, -.3)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[8]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[8]
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)

        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
    ButtonComponent button_9
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (.5, -.3)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[9]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[9]
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)

        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
    TextComponent text
      startVal [time (s)] = 0.0
      pos = (0.2, 0.2)
      saveStartStop = False
      syncScreenRefresh = False
      letterHeight = 0.05
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      text [set every frame]:
        $timer_display
    TextComponent number_of_correct_text
      startVal [time (s)] = 0.0
      pos = (0.4, 0.4)
      saveStartStop = False
      syncScreenRefresh = False
      disabled = True
      text [set every repeat] = $f"Number correct: {correct}"
      letterHeight = 0.05
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    TextComponent number_of_incorrect_text
      startVal [time (s)] = 0.0
      pos = (-0.4, 0.4)
      disabled = True
      text [set every repeat] = $f"Number incorrect: {incorrect}"
      letterHeight = 0.05
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    ProgressComponent prog
      startVal [time (s)] = 0
      color [set every frame] = 1.0000, 1.0000, 1.0000
      fillColor [set every frame] = black
      borderColor = white
      size = (0.5, 0.05)
      pos = (-.250, -0.45)
      units = height
      anchor = center-left
      saveStartStop = False
      disabled = True
      progress [set every frame] = max(0, 1 - (globalClock.getTime() / total_time))
      lineWidth = 4
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    CodeComponent add_data_correct_inforrect_count
      Code Type = Both
      End Routine:
        thisExp.addData("Number_correct", correct)
        thisExp.addData("Number_incorrect", incorrect)
    TextComponent display_digit
      startVal [time (s)] = 0.0
      pos = (0, 0.2)
      text [set every repeat] = $digit
      letterHeight = 0.2
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  Routine reprimand
    RoutineSettingsComponent reprimand
      durationEstim = 5
      forceNonSlip = True
      skipIf = response == digit or globalClock.getTime()>= total_time
      saveStartStop = False
      disabled = True
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    CodeComponent debug_text_reprimand
      Code Type = Auto->JS
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      Each Frame:
        timer_lines = []
        timer_lines.append(f"Global: {globalClock.getTime():.2f}s")

        try:
            timer_lines.append(f"Routine: {routineTimer.getTime():.2f}s")
        except:
            timer_lines.append("Routine: N/A")

        #try:
        #    timer_lines.append(f"Inner: {innerClock.getTime():.2f}s")
        #except:
        #    timer_lines.append("Inner: N/A")
        #
        #try:
        #    timer_lines.append(f"Trial: {trialClock.getTime():.2f}s")
        #except:
        #    timer_lines.append("Trial: N/A")

        #try:
        #    timer_lines.append(f"Inner remaining: {inner_loop.nRemaining}")
        #except:
        #    timer_lines.append("Inner remaining: N/A")

        # Add the digit being shown this trial
        try:
            timer_lines.append(f"Digit: {digit}")
        except:
            timer_lines.append("Digit: N/A")

        timer_display = "\n".join(timer_lines)
    CodeComponent code_reprimand
      Code Type = Both
      Begin Routine:
        print('In begin routine of reprimand section')
        #if response == None:
        #    if (ended_routine_at - min_time_for_incorrect) >= (started_routine_at):
        #        counted_skipped_incorrect = True
        #        incorrect += 1
        #
      Each Frame:
        if globalClock.getTime() > total_time:
            print(f'Global Clock > {total_time} in each frame of reprimand routine')
            inner_loop.finished = True
            continueRoutine = False
    ImageComponent image_2
      startVal [time (s)] = 0.0
      size = (0.4, 0.4)
      pos = (0, 0.3)
      saveStartStop = False
      syncScreenRefresh = False
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      image [set every repeat]:
        $trials.thisTrial[expInfo['Language']]
    ButtonComponent button
      startVal [time (s)] = 0
      size = (0.12, 0.12)
      pos = (-.0, -.1)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digit
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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    TextComponent text_2
      startVal [time (s)] = 0.0
      pos = (0.2, 0.2)
      saveStartStop = False
      syncScreenRefresh = False
      letterHeight = 0.05
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      text [set every frame]:
        $timer_display
    TextComponent number_of_correct_text_2
      startVal [time (s)] = 0.0
      pos = (0.4, 0.4)
      saveStartStop = False
      syncScreenRefresh = False
      text [set every repeat] = $f"Number correct: {correct}"
      letterHeight = 0.05
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    TextComponent number_of_incorrect_text_2
      startVal [time (s)] = 0.0
      pos = (-0.4, 0.4)
      saveStartStop = False
      syncScreenRefresh = False
      text [set every repeat] = $f"Number incorrect: {incorrect}"
      letterHeight = 0.05
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    ProgressComponent prog_2
      startVal [time (s)] = 0
      color [set every frame] = 1.0000, 1.0000, 1.0000
      fillColor [set every frame] = black
      borderColor = white
      size = (0.5, 0.05)
      pos = (-.250, -0.45)
      units = height
      anchor = center-left
      saveStartStop = False
      syncScreenRefresh = False
      progress [set every frame] = max(0, 1 - (globalClock.getTime() / total_time))
      lineWidth = 4
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  Routine blank_screen
    RoutineSettingsComponent blank_screen
      stopVal [duration (s)] = 0.05
      saveStartStop = False
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    CodeComponent flip_background_reset_timer
      Code Type = Auto->JS
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      Begin Routine:
        # Save the current background so you can restore it later
        old_bg = win.color

        # Set background to black
        win.color = 'black'
        win.flip()
      End Routine:
        win.color = old_bg
        win.flip()
        #globalClock.reset()
        print('Got into the reset_clcoks routine')
    TextComponent text_3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
      syncScreenRefresh = False
      letterHeight = 0.05
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  Routine Notice
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    TextComponent text_5
      startVal [time (s)] = 0.0
      text = The researcher will prepare the computer for the next phase.
      letterHeight = 0.05
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    MouseComponent mouse_2
      startVal [time (s)] = 10
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
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    TextComponent number_of_correct_text_4
      startVal [time (s)] = 0.0
      pos = (0.4, 0.4)
      saveStartStop = False
      syncScreenRefresh = False
      text [set every repeat] = $f"Number correct: {correct}"
      letterHeight = 0.05
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    TextComponent number_of_incorrect_text_4
      startVal [time (s)] = 0.0
      pos = (-0.4, 0.4)
      text [set every repeat] = $f"Number incorrect: {incorrect}"
      letterHeight = 0.05
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    CodeComponent log_time_2
      Code Type = Auto->JS
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      Begin Routine:
        elapsed = time.time() - exp_start_time
        print("Elapsed:", round(elapsed, 2))
        thisExp.addData('Experiment End Time', round(elapsed, 2))
        #timer_lines.append(f"Global: {globalClock.getTime():.2f}s")
        #
  Routine Welcome_Screen
    RoutineSettingsComponent Welcome_Screen
      saveStartStop = False
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    TextComponent Welcome_Text
      saveStartStop = False
      syncScreenRefresh = False
      text = Welcome!  Please click anywhere to begin.  
      letterHeight = 0.05
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    MouseComponent Welcome_Continue_mouse
      startVal [time (s)] = 3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      saveStartStop = False
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    CodeComponent reset_global_clock
      Code Type = Auto->JS
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      End Routine:
        globalClock.reset()
Flow
  Routine Welcome_Screen
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    conditionsFile = digit_paths_black.csv
    nReps = 40
    endPoints = [0,1]
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    conditions:
      [OrderedDict([('digit', np.int64(0)), ('arabic_path', 'digits_output/Arabic/0_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/0_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/0_Mandarin_black.png'), ('correct_answer', np.int64(0)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(1)), ('arabic_path', 'digits_output/Arabic/1_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/1_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/1_Mandarin_black.png'), ('correct_answer', np.int64(1)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(2)), ('arabic_path', 'digits_output/Arabic/2_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/2_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/2_Mandarin_black.png'), ('correct_answer', np.int64(2)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(3)), ('arabic_path', 'digits_output/Arabic/3_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/3_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/3_Mandarin_black.png'), ('correct_answer', np.int64(3)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))])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
    LoopInitiator inner_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 1
      endPoints = [0,1]
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      Routine trial
    LoopTerminator inner_loop
    Routine blank_screen
  LoopTerminator trials
  Routine Notice
